PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'id': '', 'gender (M/F/N)': '', 'age': '', 'hand(R/L)': '', 'session': '001', 'group': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 900]
  expName = experiment_eo_ec_controller_annotations
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Routines
  Routine trial
    ImageComponent valence_arousal_space
      image = res\img\valence_arousal_space_basic.png
      opacity = 0.5
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    ImageComponent reticle
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent song_one
      sound = res\playlist\song_1.ogg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      timeRelativeTo = routine
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    SoundComponent open_eyes
      sound = A
      startVal [time (s)] = 59
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_one_rating
      Data Format = rows
      Item Padding = 0.1
      Items = res\forms\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating
      sound = res\1 min wn.wav
      startVal [time (s)] = 80
      stopVal [duration (s)] = 15
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    TextComponent instruction_ec
      letterHeight = 0.1
      startVal [time (s)] = 80
      stopVal [duration (s)] = 10
      text = Now CLOSE your eyes and get ready for the next song.
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    ImageComponent eyes_closed
      image = res\img\eye_closed.png
      size = (1, 1)
      startVal [time (s)] = 90
      stopVal [duration (s)] = 5
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    ImageComponent valence_arousal_space_2
      image = res\img\valence_arousal_space_basic.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    SoundComponent song_two
      sound = res\playlist\song_2.ogg
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    ImageComponent reticle_2
      image = res\img\reticle.png
      size = (0.075, 0.075)
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
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    JoystickComponent joystick_2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = every frame
      startVal [time (s)] = 95
      stopVal [duration (s)] = 60
      timeRelativeTo = joystick onset
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    SoundComponent eyes_open
      sound = A
      startVal [time (s)] = 154
      stopVal [duration (s)] = 1.0
      volume = 0.5
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    FormComponent song_two_rating
      Data Format = rows
      Item Padding = 0.05
      Items = res\rating_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 155
      stopVal [duration (s)] = 20
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    SoundComponent white_noise_rating_two
      sound = res\1 min wn.wav
      startVal [time (s)] = 175
      stopVal [duration (s)] = 15
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    TextComponent instruction_eo
      letterHeight = 0.1
      startVal [time (s)] = 175
      stopVal [duration (s)] = 10
      text = Now OPEN your eyes and get ready for the next song.
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    ImageComponent eyes_open_2
      image = res\img\eye_open.png
      size = (0.5, 0.5)
      startVal [time (s)] = 185
      stopVal [duration (s)] = 5
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  Routine enter_rest_state
  Routine exit_rest_state
  Routine intro
  Routine white_noise
Flow
  Routine intro
  Routine enter_rest_state
  Routine white_noise
  LoopInitiator music_emotion_trial_eo_ec loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator music_emotion_trial_eo_ec
  Routine exit_rest_state
